CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "C1")
    Name to assign these images:PH3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C2")
    Name to assign these images:PAX3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:150
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    Thresholding method:Otsu

MaskImage:[module_num:6|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
    Select the input image:PAX3
    Name the output image:Mask_1_PAX3
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:7|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
    Select the input image:PH3
    Name the output image:Mask_PH3
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Mask_1_PAX3
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:Mask_PH3
    Select objects to measure:Nuclei

FilterObjects:[module_num:10|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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredPAX3
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Mask_1_PAX3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0055
    Filter using a maximum measurement value?:Yes
    Maximum value:1
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
FilterObjects:[module_num:11|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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredPH3
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Mask_PH3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0045
    Filter using a maximum measurement value?:Yes
    Maximum value:1
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
MaskImage:[module_num:12|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
    Select the input image:PAX3
    Name the output image:Mask_2_PAX3
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:Mask_2_PAX3
    Select objects to measure:FilteredPAX3

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:FilteredPH3|Number_Object_Number,Nuclei|Intensity_MeanIntensity_Mask_PH3,Nuclei|Intensity_MeanIntensity_Mask_1_PAX3,Nuclei|Intensity_MinIntensity_Mask_PH3,Nuclei|Intensity_MinIntensity_Mask_1_PAX3,Nuclei|Intensity_MaxIntensity_Mask_1_PAX3,Nuclei|Intensity_MaxIntensity_Mask_PH3,Nuclei|Intensity_IntegratedIntensity_Mask_PH3,Nuclei|Intensity_IntegratedIntensity_Mask_1_PAX3,Image|Count_Nuclei,Image|Count_FilteredPH3,Image|Count_FilteredPAX3,Image|FileName_DNA,FilteredPAX3|Intensity_MaxIntensity_Mask_2_PAX3,FilteredPAX3|Intensity_MinIntensity_Mask_2_PAX3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CM34_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:quantif

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